# Generated by Configurator on Tue Sep 21 10:44:07 EDT 2021

# Reset
Property,Core,Initialize,0

# Devices
Device,COM1,SerialManager,COM1
Device,COM6,SerialManager,COM6
Device,COM4,SerialManager,COM4
Device,TIScope,NikonTI,TIScope
Device,TIDiaLamp,NikonTI,TIDiaLamp
Device,TINosePiece,NikonTI,TINosePiece
Device,TIFilterBlock1,NikonTI,TIFilterBlock1
Device,TILightPath,NikonTI,TILightPath
Device,TIZDrive,NikonTI,TIZDrive
Device,TIPFSOffset,NikonTI,TIPFSOffset
Device,TIPFSStatus,NikonTI,TIPFSStatus
Device,TIAnalyzer,NikonTI,TIAnalyzer
Device,HamamatsuHam_DCAM,HamamatsuHam,HamamatsuHam_DCAM

# Pre-init settings for devices

# Pre-init settings for COM ports
Property,COM1,AnswerTimeout,500.0000
Property,COM1,BaudRate,9600
Property,COM1,DTR,Disable
Property,COM1,DataBits,8
Property,COM1,DelayBetweenCharsMs,0.0000
Property,COM1,Fast USB to Serial,Disable
Property,COM1,Handshaking,Off
Property,COM1,Parity,None
Property,COM1,StopBits,1
Property,COM1,Verbose,1
Property,COM6,AnswerTimeout,500.0000
Property,COM6,BaudRate,9600
Property,COM6,DTR,Disable
Property,COM6,DataBits,8
Property,COM6,DelayBetweenCharsMs,0.0000
Property,COM6,Fast USB to Serial,Disable
Property,COM6,Handshaking,Off
Property,COM6,Parity,None
Property,COM6,StopBits,1
Property,COM6,Verbose,1
Property,COM4,AnswerTimeout,500.0000
Property,COM4,BaudRate,9600
Property,COM4,DTR,Disable
Property,COM4,DataBits,8
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Fast USB to Serial,Disable
Property,COM4,Handshaking,Off
Property,COM4,Parity,None
Property,COM4,StopBits,1
Property,COM4,Verbose,1

# Hub (parent) references
Parent,TIDiaLamp,TIScope
Parent,TINosePiece,TIScope
Parent,TIFilterBlock1,TIScope
Parent,TILightPath,TIScope
Parent,TIZDrive,TIScope
Parent,TIPFSOffset,TIScope
Parent,TIPFSStatus,TIScope
Parent,TIAnalyzer,TIScope

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,TIZDrive,0
FocusDirection,TIPFSOffset,0

# Roles
Property,Core,Camera,HamamatsuHam_DCAM
Property,Core,Shutter,TIDiaLamp
Property,Core,Focus,TIZDrive
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# TINosePiece
Label,TINosePiece,5,6-Unknown
Label,TINosePiece,4,5-Unknown
Label,TINosePiece,3,4-Unknown
Label,TINosePiece,2,3-Plan Apo 40x NA 0.95 Dry
Label,TINosePiece,1,2-Apo TIRF 60x NA 1.49 Oil
Label,TINosePiece,0,1-Apo TIRF 100x NA 1.49 Oil
# TIFilterBlock1
Label,TIFilterBlock1,5,6-ANALY
Label,TIFilterBlock1,4,5------
Label,TIFilterBlock1,3,4-RFP
Label,TIFilterBlock1,2,3------
Label,TIFilterBlock1,1,2-GFP
Label,TIFilterBlock1,0,1------
# TILightPath
Label,TILightPath,3,4-Left80
Label,TILightPath,2,3-Right100
Label,TILightPath,1,2-Left100
Label,TILightPath,0,1-Eye100

# Configuration presets
# Group: System
# Preset: Startup



# PixelSize settings

